<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="4.5.20">
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_cropfilter.CropFilterModule" parameter_version="1">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="All MS levels">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">-</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="m/z">
            <min>0.0</min>
            <max>1500.0</max>
        </parameter>
        <parameter name="Suffix">c</parameter>
        <parameter name="Filter out empty scans">true</parameter>
        <parameter name="Remove source file after filtering">true</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.import_spectral_library.SpectralLibraryImportModule" parameter_version="1">
        <parameter name="Spectral library files">
            <file>I:\AISHEE_20231130\MSMS_processing\std_neg_normalizedToMax.mgf</file>
            <file>I:\AISHEE_20231130\MSMS_processing\std_pos_normalizedToMax.mgf</file>
            <file>I:\AISHEE_20231130\MSMS_processing\MassBank_BOKU_iBAM.mgf</file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Mass detector" selected_item="Auto">
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            <module name="Auto">
                <parameter name="Noise level">10000.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MSn, level ≥ 2">3</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Mass detector" selected_item="Auto">
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            <module name="Auto">
                <parameter name="Noise level">100.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.5</min>
                <max>13.0</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">3</parameter>
        <parameter name="Minimum intensity for consecutive scans">10000.0</parameter>
        <parameter name="Minimum absolute height">50000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
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            <module name="Savitzky Golay">
                <parameter name="Retention time smoothing" selected="false">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</parameter>
                <parameter name="Mobility smoothing" selected="false">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</parameter>
            </module>
        </parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Suffix">sm</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use tolerance" unit="MINUTES">0.1</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">true</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum detections in IMS dimension">2</parameter>
            <parameter name="Advanced" selected="false">
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            </parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.7390000000000001</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.1</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">100000.0</parameter>
        <parameter name="Min ratio of peak top/edge">5.0</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.1</min>
            <max>3.01</max>
        </parameter>
        <parameter name="Minimum scans (data points)">3</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.08</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">1</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.004</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.05</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_csv.CSVExportModularModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\output\processing__full_feature_table__IntermediateAfterJoining</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Remove empty columns">true</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_featureML.FeatureMLExportModularModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\output\processing__full_feature_table__IntermediateAfterJoining.featureML</current_file>
        </parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">peak</parameter>
        <parameter name="Minimum aligned features (samples)" selected="true">
            <abs>3</abs>
            <rel>0.0</rel>
        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false">
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        </parameter>
        <parameter name="Retention time" selected="false">
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        </parameter>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="true">
            <min>0.01</min>
            <max>0.4</max>
        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false">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</parameter>
        <parameter name="Text in comment" selected="false">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</parameter>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">false</parameter>
        <parameter name="Never remove feature with MS2">false</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the feature number ID">false</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">gaps</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.01</parameter>
        <parameter name="Minimum scans (data points)">1</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>8.0E-4</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.05</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_blanksubtraction.FeatureListBlankSubtractionModule" parameter_version="1">
        <parameter name="Aligned feature list" type="BATCH_LAST_FEATURELISTS">
            <name_pattern>Blank|blank</name_pattern>
        </parameter>
        <parameter name="Blank/Control raw data files" type="NAME_PATTERN">
            <name_pattern>*Blank*</name_pattern>
        </parameter>
        <parameter name="Minimum # of detection in blanks">2</parameter>
        <parameter name="Quantification">Height</parameter>
        <parameter name="Ratio type">MAXIMUM</parameter>
        <parameter name="Fold change increase" selected="true">10.0</parameter>
        <parameter name="Keep or remove features (of rows) below fold change">REMOVE - Only keep features above fold change</parameter>
        <parameter name="Create secondary list of subtracted features">false</parameter>
        <parameter name="Suffix">subtracted</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataanalysis.spec_chimeric_precursor.PrecursorPurityCheckerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Target ion m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Precursor m/z isolation tolerance">
            <absolutetolerance>2.0</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Minimum precursor purity (%)">0.75</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataanalysis.feat_ms2_similarity_intra.IntraFeatureRowMs2SimilarityModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Export to file" selected="false"/>
        <parameter name="m/z tolerance (MS2)">
            <absolutetolerance>0.003</absolutetolerance>
            <ppmtolerance>25.0</ppmtolerance>
        </parameter>
        <parameter name="Minimum signals">4</parameter>
        <parameter name="Signal filters">
            <parameter name="Remove residual precursor m/z" selected="false">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</parameter>
            <parameter name="Crop to top N signals">20</parameter>
            <parameter name="Signal threshold (intensity filter)">15</parameter>
            <parameter name="Intensity filter at &gt;N signals">0.95</parameter>
        </parameter>
        <parameter name="Split by collision energy">true</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="RT tolerance" unit="MINUTES">0.06</parameter>
        <parameter name="Minimum feature height">0.0</parameter>
        <parameter name="Intensity threshold for correlation">10000.0</parameter>
        <parameter name="Min samples filter">
            <parameter name="Min samples in all">
                <abs>1</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min samples in group">
                <abs>0</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min %-intensity overlap">0.6</parameter>
            <parameter name="Exclude gap-filled features">true</parameter>
        </parameter>
        <parameter name="Feature shape correlation" selected="true">
            <parameter name="Min data points">5</parameter>
            <parameter name="Min data points on edge">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min feature shape correlation">0.8</parameter>
            <parameter name="Min total correlation" selected="false">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</parameter>
        </parameter>
        <parameter name="Feature height correlation" selected="false">
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        </parameter>
        <parameter name="Suffix (or auto)" selected="false"/>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Advanced" selected="true">
            <parameter name="Keep extended stats">false</parameter>
            <parameter name="Simplify for ≥ samples">250</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Check">ALL FEATURES</parameter>
        <parameter name="Min height">0.0</parameter>
        <parameter name="Ion identity library">
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="0.0" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="34.969401" mol_formula="Cl" name="Cl" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="44.99820285" mol_formula="HCO2" name="-H+CH2O2" type="ADDUCT"/>
                </adduct_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-17.026549" mol_formula="NH3" name="NH3" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="15.99491462" mol_formula="O" name="O" type="CLUSTER"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-27.994915" mol_formula="CO" name="CO" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-43.989829" mol_formula="CO2" name="CO2" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-28.031301" mol_formula="C2H4" name="C2H4" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="46.005479" mol_formula="CHOOH" name="CH2O2" type="CLUSTER"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="60.021129" mol_formula="CH3COOH" name="HAc" type="CLUSTER"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="32.026215" mol_formula="CH3OH" name="MeOH" type="CLUSTER"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="41.026549" mol_formula="CH3CN" name="ACN" type="CLUSTER"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="60.058064" mol_formula="C3H8O" name="IsoProp" type="CLUSTER"/>
                </modification_type>
            </parameter>
        </parameter>
        <parameter name="Annotation refinement" selected="true">
            <parameter name="Minimum size" selected="false">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</parameter>
            <parameter name="Delete small networks without major ion">true</parameter>
            <parameter name="Delete smaller networks: Link threshold" selected="true">4</parameter>
            <parameter name="Delete networks without monomer">true</parameter>
            <parameter name="Delete rows witout ion id">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_spectral_networking.MainSpectralNetworkingModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Algorithm" selected_item="Modified cosine">
            <module name="Modified cosine">
                <parameter name="m/z tolerance">
                    <absolutetolerance>0.01</absolutetolerance>
                    <ppmtolerance>20.0</ppmtolerance>
                </parameter>
                <parameter name="Merge &amp; select fragment scans" selected_item="preset_merged">
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                    <module name="preset_merged">
                        <parameter name="Presets">representative_scans</parameter>
                        <parameter name="Merging m/z tolerance">
                            <absolutetolerance>0.008</absolutetolerance>
                            <ppmtolerance>25.0</ppmtolerance>
                        </parameter>
                        <parameter name="Merge">
                            <selected>Across samples</selected>
                        </parameter>
                        <parameter name="Intensity merge mode">SUMMED</parameter>
                    </module>
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                </parameter>
                <parameter name="Max precursor m/z delta" selected="true">500.0</parameter>
                <parameter name="Minimum matched signals">4</parameter>
                <parameter name="Min cosine similarity">0.6</parameter>
                <parameter name="Signal filters">
                    <parameter name="Remove residual precursor m/z" selected="true">10.0</parameter>
                    <parameter name="Crop to top N signals">50</parameter>
                    <parameter name="Signal threshold (intensity filter)">50</parameter>
                    <parameter name="Intensity filter at &gt;N signals">0.9</parameter>
                </parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_spectral_library_match.SpectralLibrarySearchModule" parameter_version="3">
        <parameter name="Spectral libraries" type="ALL_IMPORTED"/>
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
            <module name="simple_merged">
                <parameter name="Presets">representative_scans</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.0015</absolutetolerance>
                    <ppmtolerance>25.0</ppmtolerance>
                </parameter>
            </module>
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        </parameter>
        <parameter name="MS level filter" selected="MS2, level = 2">3</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>25.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">true</parameter>
        <parameter name="Minimum  matched signals">4</parameter>
        <parameter name="Similarity" selected_item="Weighted cosine similarity">
            <module name="Weighted cosine similarity">
                <parameter name="Weights">MassBank (mz^2 * I^0.5)</parameter>
                <parameter name="Minimum  cos similarity">0.7</parameter>
                <parameter name="Handle unmatched signals">KEEP LIBRARY SIGNALS</parameter>
            </module>
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        </parameter>
        <parameter name="Advanced" selected="true">
            <parameter name="Retention time tolerance" selected="true" unit="MINUTES">0.2</parameter>
            <parameter name="CCS tolerance [%]" selected="false">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</parameter>
            <parameter name="13C deisotoping" selected="false">
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            </parameter>
            <parameter name="Min matched isotope signals" selected="false">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</parameter>
            <parameter name="Crop spectra to m/z overlap">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_network_graphml.NetworkGraphMlExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\output\processing__networks</current_file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.visualization.projectmetadata.io.ProjectMetadataExportModule" parameter_version="1">
        <parameter name="Metadata file">
            <current_file>C:\output\processing__metadata</current_file>
        </parameter>
        <parameter name="Format">Default</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_csv.CSVExportModularModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\output\processing__full_feature_table</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Remove empty columns">true</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\output\processing__iimn_fbmn</current_file>
        </parameter>
        <parameter name="Filter rows">MS2 OR ION IDENTITY</parameter>
        <parameter name="Merge &amp; select fragment scans" selected_item="preset_merged">
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            <module name="preset_merged">
                <parameter name="Presets">single_merged_scan</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.008</absolutetolerance>
                    <ppmtolerance>25.0</ppmtolerance>
                </parameter>
                <parameter name="Merge">
                    <selected>Across samples</selected>
                </parameter>
                <parameter name="Intensity merge mode">SUMMED</parameter>
            </module>
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        </parameter>
        <parameter name="Intensity normalization" scientific="false">no_normalization</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\output\processing__sirius</current_file>
        </parameter>
        <parameter name="Intensity normalization" scientific="true">no_normalization</parameter>
        <parameter name="Merge &amp; select fragment scans" selected_item="preset_merged">
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            <module name="preset_merged">
                <parameter name="Presets">representative_scans</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.008</absolutetolerance>
                    <ppmtolerance>25.0</ppmtolerance>
                </parameter>
                <parameter name="Merge">
                    <selected>Across samples</selected>
                </parameter>
                <parameter name="Intensity merge mode">SUMMED</parameter>
            </module>
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_compoundAnnotations_csv.CompoundAnnotationsCSVExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\output\processing__annotations.csv</current_file>
        </parameter>
        <parameter name="Top N per method">10</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_featureML.FeatureMLExportModularModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\output\processing__full_feature_table.featureML</current_file>
        </parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.projectsave.ProjectSaveAsModule" parameter_version="1">
        <parameter name="Project file">
            <current_file>C:\output\mzmine_project.mzmine</current_file>
        </parameter>
        <parameter name="Project type">Referencing (small)</parameter>
    </batchstep>
</batch>
